PsychoPy2experiment version="1.82.00"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1040, 800]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Ebbinghaus_onDemo
  Units = height
  Screen = 1
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Routines
  Routine plot_data
    CodeComponent plot_data_array
      Begin Experiment:
        from matplotlib import pyplot
        import pandas as pd
      Begin Routine:
        def plotYX(yaxis, xaxis, description=''):
            pyplot.grid(True)
            pyplot.title(description)
            pyplot.xlabel('Angle')
            pyplot.ylabel('Response time (s)')
            pyplot.xlim([0, 315])
            #slope,inter = np.polyfit(xaxis[:5],yaxis[:5],1)
            pyplot.plot(xaxis, yaxis) #, xaxis[:5], np.array(xaxis[:5]) * slope + inter)
            pyplot.draw()
            pyplot.show()

        filename = 'mental_rotation_data.csv'
        with open(filename, 'wb') as fd:
            fd.write(data_string)

        data = pd.read_csv(filename)
        data = data[data['rt'] < 4]  # trim RT at 4 sec
        mrt = data.loc[:,'rt']
        correct = data.loc[:, 'corr']
        angle = data.loc[:, 'angle']

        dfsum = data.groupby('angle', as_index=False).mean()
        m = dfsum.loc[:, 'rt']
        a = dfsum.loc[:, 'angle']

        scored_data = zip(a, m)
        print 'average time (sec) at each rotation:'
        print "  0  45  90  135 180 225 270 315"
        print "--> %s <--" % repr([round(i,3) for i in m]).strip('[]').replace(',', '  ')
        print "\n% correct        :", 100 * correct.mean()
        print "overall speed (s):", mrt.mean()

        plotYX(m, a)

        with open(filename, 'a+b') as fd:
            fd.write('\n\n' + repr(scored_data))
  Routine pause
    TextComponent mini_pause
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        if trials.thisN == 4 and expInfo['participant'] == 'JRG':
            trials.finished = True
  Routine Intructions_1
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text_4
      wrapWidth = .8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        ¡Bienvenido!

        Estás a punto de participar en un experimento de la Facultad de Psicología, UNAM.


        A continuación se te presentarán dos figuras compuestas cada una por un círculo central con algunos círculos al rededor. Tu tarea consistirá en identificar los casos en que ambos círculos centrales sean del mismo tamaño.

        Cuando detectes un caso en que los círculos centrales son iguales, presiona la tecla 'i'. Si los círculos céntricos no son del mismo tamaño, presiona 'o'

        Presiona la barra espaciadora para continuar
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Intructions_2
    KeyboardComponent key_resp_6
      correctAns = $same
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_L_3
      mask = raisedCos
      pos = [-.25, .2]
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = FR.png
      size = [.3,.3]
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    ImageComponent image_R_3
      mask = raisedCos
      pos = [0.25, .2]
      ori [set every repeat] = -90
      startVal [time (s)] = 0.0
      image [set every repeat] = F.png
      size = [.3,.3]
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    TextComponent text_5
      wrapWidth = .8
      color = black
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Por ejemplo, aquí el círculo central de la figura derecha es más grande que el de la izquierda. En este caso la respuesta correcta es: que NO son iguales (Deberías presionar 'o')


        Trata de ser tan preciso como puedas.

        No hay límite de tiempo para que emitas tus respuestas, sin embargo, dado que el experimento puede ser un tanto extenso, se te recomienda que no te tomes tanto tiempo por ensayo.


        Para comenzar con el experimento, apreta la Barra Espaciadora.
  Routine Practice
    CodeComponent code_2
      Begin Routine:
        if same == 'n':
            limage = 'F.png'
            rimage = 'FR.png'
            if random() > .5:
               rimage, limage = limage, rimage
        else:
            limage = rimage = 'F.png'
            if random() > .5:
                limage = rimage = 'FR.png'
    KeyboardComponent key_resp_5
      correctAns = $same
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'n','m'
      startVal [time (s)] = 0.0
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    ImageComponent image_L_2
      mask = raisedCos
      pos = [-.25, 0]
      ori [set every repeat] = leftori
      startVal [time (s)] = 0.0
      image [set every repeat] = $limage
      size = [.3,.3]
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    ImageComponent image_R_2
      mask = raisedCos
      pos = [0.25, 0]
      ori [set every repeat] = rightori
      startVal [time (s)] = 0.0
      image [set every repeat] = $rimage
      size = [.3,.3]
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    TextComponent text_2
      color = black
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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      text:
        'm' if mirror images of each other
        'n' if both are the same
  Routine the_end
    TextComponent text_3
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        The end.

        Press space to see your data.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    CodeComponent code
      Begin Routine:
        if same == 'n':
            limage = 'F.png'
            rimage = 'FR.png'
            if random() > .5:
               rimage, limage = limage, rimage
        else:
            limage = rimage = 'F.png'
            if random() > .5:
                limage = rimage = 'FR.png'
    KeyboardComponent Response
      correctAns = ('n','m')[$same=='n']
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'n','m'
      startVal [time (s)] = 0.0
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    ImageComponent image_L
      mask = raisedCos
      pos = [-.25, 0]
      ori [set every repeat] = leftori
      startVal [time (s)] = 0.0
      image [set every repeat] = $limage
      size = [.3,.3]
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    ImageComponent image_R
      mask = raisedCos
      pos = [0.25, 0]
      ori [set every repeat] = rightori
      startVal [time (s)] = 0.0
      image [set every repeat] = $rimage
      size = [.3,.3]
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    TextComponent text
      color = black
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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      text:
        'm' for "different"
        'n' for "same"
    CodeComponent add_data
      Begin Experiment:
        data_string = 'angle,rt,corr\n'
      End Routine:
        data_string += '%d,%.3f,%d\n' % (abs(angle), Response.rt, Response.corr)
    TextComponent trial_count
      color = black
      text [set every repeat] = $trials.thisN
      pos = [.4, -.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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  Routine pause_start
    TextComponent mini_pause_2
      text =  +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine licence
    TextComponent licence_info
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        AUTHORS: Jeremy R. Gray & Nathaniel R. Pasmanter
        CONTACT: jrgray@gmail.com

        COPYRIGHT (c) 2013 MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES
        ALL RIGHTS RESERVED

        PERMISSION IS GRANTED TO USE, COPY, CREATE DERIVATIVE WORKS AND REDISTRIBUTE
        THIS SOFTWARE AND SUCH DERIVATIVE WORKS FOR ANY PURPOSE, SO LONG AS NO FEE IS
        CHARGED, AND SO LONG AS THE AUTHORSHIP AND COPYRIGHT NOTICE ABOVE, THIS GRANT
        OF PERMISSION, AND THE DISCLAIMER BELOW APPEAR IN ALL COPIES MADE; AND SO LONG
        AS THE NAME OF MICHIGAN STATE UNIVERSITY IS NOT USED IN ANY ADVERTISING OR
        PUBLICITY PERTAINING TO THE USE OR DISTRIBUTION OF THIS SOFTWARE WITHOUT
        SPECIFIC, WRITTEN PRIOR AUTHORIZATION.

        THIS SOFTWARE IS PROVIDED AS IS, WITHOUT REPRESENTATION FROM MICHIGAN STATE
        UNIVERSITY AS TO ITS FITNESS FOR ANY PURPOSE, AND WITHOUT WARRANTY BY MICHIGAN
        STATE UNIVERSITY OF ANY KIND, EITHER EXPRESS OR IMPLIED, INCLUDING WITHOUT
        LIMITATION THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A
        PARTICULAR PURPOSE. THE MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES SHALL NOT
        BE LIABLE FOR ANY DAMAGES, INCLUDING SPECIAL, INDIRECT, INCIDENTAL, OR
        CONSEQUENTIAL DAMAGES, WITH RESPECT TO ANY CLAIM ARISING OUT OF OR IN
        CONNECTION WITH THE USE OF THE SOFTWARE, EVEN IF IT HAS BEEN OR IS HEREAFTER
        ADVISED OF THE POSSIBILITY OF SUCH DAMAGES.
Flow
  Routine Intructions_1
  Routine Intructions_2
  Routine pause_start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MentalRot.csv
    loopType = random
    nReps = 6
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    conditions:
      [{'angle': 0, 'leftori': 0, 'rightori': 0, 'same': u'n'},
      {'angle': 0, 'leftori': 0, 'rightori': 0, 'same': u'y'},
      {'angle': 45, 'leftori': 0, 'rightori': 45, 'same': u'n'},
      {'angle': 45, 'leftori': 0, 'rightori': 45, 'same': u'y'},
      {'angle': 90, 'leftori': 0, 'rightori': 90, 'same': u'n'},
      {'angle': 90, 'leftori': 0, 'rightori': 90, 'same': u'y'},
      {'angle': 135, 'leftori': 0, 'rightori': 135, 'same': u'n'},
      {'angle': 135, 'leftori': 0, 'rightori': 135, 'same': u'y'},
      {'angle': 180, 'leftori': 0, 'rightori': 180, 'same': u'n'},
      {'angle': 180, 'leftori': 0, 'rightori': 180, 'same': u'y'},
      {'angle': 225, 'leftori': 0, 'rightori': 225, 'same': u'n'},
      {'angle': 225, 'leftori': 0, 'rightori': 225, 'same': u'y'},
      {'angle': 270, 'leftori': 0, 'rightori': 270, 'same': u'n'},
      {'angle': 270, 'leftori': 0, 'rightori': 270, 'same': u'y'},
      {'angle': 315, 'leftori': 0, 'rightori': 315, 'same': u'n'},
      {'angle': 315, 'leftori': 0, 'rightori': 315, 'same': u'y'}]
    Routine Trial
    Routine pause
  LoopTerminator trials
  Routine the_end
  Routine plot_data
